# -------------------------------------------------------------------------------------
# Genera el PhaseSpace: " PhaseSpace_Galactic.*"
# Es el código que genera la fuente de rayos cósmicos predefinidos desde SPENVIS y utilizados en TOPAS.
# Autora: Angela Malagon.
# -------------------------------------------------------------------------------------

# ----------------- FUENTE RAYOS COSMICOS --------------------
# ================= MUNDO ===========================
b:Ge/World/Invisible            = "T"
d:Ge/World/HLX                  = 100 cm
d:Ge/World/HLZ                  = 100 cm
d:Ge/World/HLY                  = 100 cm
s:Ge/World/Material             = "Vacuum"

# ================= UNIVERSO DEMO ===================
s:Ge/Sphere/Parent              = "World"
s:Ge/Sphere/Type                = "TsSphere"
b:Ge/Sphere/IsParallel          = "True"
d:Ge/Sphere/RMin                = 11.0 cm
d:Ge/Sphere/RMax                = 11.1 cm
d:Ge/Sphere/SPhi                = 0.0 deg
d:Ge/Sphere/DPhi                = 360.0 deg
d:Ge/Sphere/STheta              = 0.0 deg
d:Ge/Sphere/DTheta              = 180.0 deg
b:Ge/Sphere/Invisible           = "T"
s:Ge/Sphere/DrawingStyle        = "WireFrame"
sc:Ge/Sphere/Color              = "White"

# =========== FUENTE DE RAYOS COSMICOS ==============
# -- Protones Van Allen --
s:So/CosmicPVA/Type                       = "Environment"
s:So/CosmicPVA/Component                  = "Sphere"
s:So/CosmicPVA/BeamParticle               = "proton"
s:So/CosmicPVA/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicPVA/BeamEnergySpectrumValues  = 8 1.0 3.0 1.0e1 2.5e1 5.0e1 1.0e2 2.0e2 4.0e2 MeV
uv:So/CosmicPVA/BeamEnergySpectrumWeights = 8 2.217e+6 3.013e+6 2.943e+6 1.545e+6 5.894e+5 8.893e+4 1.572e+3 5.000e+00
ic:So/CosmicPVA/NumberOfHistoriesInRun    = 50000 # 5%
s:So/CosmicPVA/BeamAngularDistribution    = "Isotropic"

# -- Protones rayos cósmicos --
s:So/CosmicP/Type                       = "Environment"
s:So/CosmicP/Component                  = "Sphere"
s:So/CosmicP/BeamParticle               = "proton"
s:So/CosmicP/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicP/BeamEnergySpectrumValues  = 8 1.9e1 3.16e1 1.0e2 3.16e2 1.0e3 3.16e3 1.0e4 1.0e5 MeV
uv:So/CosmicP/BeamEnergySpectrumWeights = 8 1.1147e-4 6.7456e-4 2.9467e-3 7.4262e-3 6.1360e-3 1.9922e-3 3.5135e-4 2.5855e-6
ic:So/CosmicP/NumberOfHistoriesInRun    = 90000 #87%
s:So/CosmicP/BeamAngularDistribution    = "Isotropic"

# -- Alfa --
s:So/CosmicA/Type                     = "Environment"
s:So/CosmicA/Component                = "Sphere"
s:So/CosmicA/BeamParticle             = "alpha"
s:So/CosmicA/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicA/BeamEnergySpectrumValues  = 8 1.0 3.16 1.0e2 3.16e2 1.0e3 3.16e3 1.0e4 1.0e5 MeV
uv:So/CosmicA/BeamEnergySpectrumWeights = 8 1.8302e-6 2.1264e-5 1.6267e-4 5.5684e-4 5.2530e-4 1.8340e-4 3.3283e-5 2.5034e-7
ic:So/CosmicA/NumberOfHistoriesInRun  = 18000 # 12%
s:So/CosmicA/BeamAngularDistribution   = "Isotropic"

# -- Iones de Carbono --
s:So/CosmicC/Type                     = "Environment"
s:So/CosmicC/Component                = "Sphere"
s:So/CosmicC/BeamParticle             = "GenericIon(6, 12)" 
s:So/CosmicC/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicC/BeamEnergySpectrumValues  = 8 1.0 3.16 1.0e2 3.16e2 1.0e3 3.16e3 1.0e4 1.0e5 MeV
uv:So/CosmicC/BeamEnergySpectrumWeights = 8 1.6049e-7 1.611e-6 1.1396e-5 3.6558e-5 3.2384e-5 1.0858e-5 1.9168e-6 1.3418e-8
ic:So/CosmicC/NumberOfHistoriesInRun  = 9000 # 0.5%
s:So/CosmicC/BeamAngularDistribution   = "Isotropic"

# -- Iones de Silicio --
s:So/CosmicSi/Type                     = "Environment"
s:So/CosmicSi/Component                = "Sphere"
s:So/CosmicSi/BeamParticle             = "GenericIon(14, 28)"  
s:So/CosmicSi/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicSi/BeamEnergySpectrumValues  = 8 1.0 3.16 1.0e2 3.16e2 1.0e3 3.16e3 1.0e4 1.0e5 MeV
uv:So/CosmicSi/BeamEnergySpectrumWeights = 8 1.9546e-8 1.7618e-7 1.1572e-6 3.5204e-6 2.9818e-6 9.5855e-7 1.6508e-7 1.0543e-9
ic:So/CosmicSi/NumberOfHistoriesInRun  = 5000 # 0.2%
s:So/CosmicSi/BeamAngularDistribution   = "Isotropic"

# -- Iones de hierro --
s:So/CosmicFe/Type                     = "Environment"
s:So/CosmicFe/Component                = "Sphere"
s:So/CosmicFe/BeamParticle             = "GenericIon(26, 56)"  
s:So/CosmicFe/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicFe/BeamEnergySpectrumValues  = 8 1.0 3.16 1.0e2 3.16e2 1.0e3 3.16e3 1.0e4 1.0e5 MeV
uv:So/CosmicFe/BeamEnergySpectrumWeights = 8 1.3323e-8 1.1119e-7 6.8858e-7 2.0125e-6 1.6521e-6 5.1633e-7 8.6534e-8 5.2285e-10
ic:So/CosmicFe/NumberOfHistoriesInRun  = 5000 # 0.1%
s:So/CosmicFe/BeamAngularDistribution   = "Isotropic"

# -- Electrones --
s:So/CosmicE/Type                     = "Environment"
s:So/CosmicE/Component                = "Sphere"
s:So/CosmicE/BeamParticle             = "e-"  
s:So/CosmicE/BeamEnergySpectrumType     = "Continuous"
dv:So/CosmicE/BeamEnergySpectrumValues  = 8 4.0e-2 1.0e-1 2.5e-1 5.0e-1 1.0 2.0 3.5 5.0 MeV
uv:So/CosmicE/BeamEnergySpectrumWeights = 8 2.217e+6 3.013e+6 2.943e+6 1.545e+6 5.894e+5 8.893e+4 1.572e+3 5.000e+00
ic:So/CosmicE/NumberOfHistoriesInRun  = 950000 # 95%
s:So/CosmicE/BeamAngularDistribution   = "Isotropic"

# =========== PHYSICS LIST ==================
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules      = 4 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4ion-binarycascade" "g4decay"
d:Ph/Default/CutForAllParticles = 0.1 mm


# ============== PHASE SPACE ==================
s:Sc/PSCosmic/Quantity                  = "PhaseSpace"
s:Sc/PSCosmic/Surface                   = "Sphere/AnySurface"
s:Sc/PSCosmic/OutputType                = "ASCII"
s:Sc/PSCosmic/OutputFile                = "Galactic_Source"
i:Sc/PSCosmic/OutputBufferSize          = 1000
b:Sc/PSCosmic/OutputToConsole           = "True"
b:Sc/PSCosmic/IncludeRunID              = "True"
b:Sc/PSCosmic/IncludeEventID            = "True"
b:Sc/PSCosmic/IncludeTrackID            = "True"
b:Sc/PSCosmic/IncludeParentID           = "True"
b:Sc/PSCosmic/IncludeCreatorProcess     = "True"
s:Sc/PSCosmic/IfOutputFileAlreadyExists = "Overwrite"

#================
#==== [GUI]====== 
#================
#b:Ts/UseQt = "True"
#s:Gr/ViewA/Type = "OpenGL"
s:Gr/ViewA/ColorBy = "ParticleType"
sv:Gr/ViewA/ColorByParticleTypeNames = 6 "proton" "alpha" "1000060120" "1000140280" "1000260560" "e-" 
sv:Gr/ViewA/ColorByParticleTypeColors = 6 "lightBlue" "Pink" "Yellow" "Green" "Brown" "Red"